
property set IoMT_Properties is
	with Physical_Properties;
	
	KVO_Rate_Constant : constant  Physical_Properties::Fluid_Flow_Rate=> 1 mlPerHour;  
 	KVO_Rate : Physical_Properties::Fluid_Flow_Rate=> IoMT_Properties::KVO_Rate_Constant applies to (all);
	Prime_Rate: Physical_Properties::Fluid_Flow_Rate => IoMT_Properties::Max_Rate applies to (all);
	Max_Rate: constant Physical_Properties::Fluid_Flow_Rate => 10 mlPerMinute;
	Confirmation_Time_Limit: constant Time => 10 sec;
	
	Respiration_Rate: Physical_Properties::Fluid_Flow_Rate => IoMT_Properties::Max_Rate applies to (all); -- check this one 
		
	PO_Delay_Limit: constant Time => 2 sec;	--Pulse Oximeter reporting expected every 2 seconds
	PO_Echo_Limit: constant Time => 4 sec; --ICE Supervisor should respond to Pulse Oximeter within 4 seconds
	RM_Echo_Limit:  constant Time => 4 sec; --ICE Supervisor should respond to Respiration Monitor within 4 seconds
	RM_Delay_Limit: constant Time => 120 sec;  --respiration monitor reporting expected every 2 minutes
	PCA_Echo_Limit: constant Time => 4 sec;	--PCA Pump should respond to pause infusion within 4 seconds
	
	
end IoMT_Properties;