--Iso_Properties.aadl
--these properties are used by isolette.aadl

property set Iso_Properties is
  with --KSU_Isolette,     --AADL components that use the properties herein
--    Physical_Properties,  --AADL property types  
    EMV2;  --error modeling annex V2 predeclared properties
--    Timing_Properties;
   

--temperature  
  Temperature_Units : type units (r,F=>r*5,C=>r*9);
  Fahrenheit : type aadlreal units Iso_Properties::Temperature_Units;
 
  --Table A-9. The Manage Regulator Mode Function Constant
  Initialization_Timeout_Default : constant --Timing_Properties::
    Time => 1 sec;
  Initialization_Timeout : --Timing_Properties::
    Time => Iso_Properties::Initialization_Timeout_Default
    applies to (all);
--    (Isolette::manage_regulator_mode_mrm,Isolette::manage_monitor_mode);

--rate at which user interface fails
  InterfaceFailureRate : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.0E-7; Distribution => Fixed;];
--error rate of detection of interface failure   
  DetectionInterfaceFailureRate : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.0E-10; Distribution => Fixed;];

--likelihood that the temperature sensor will fail such that its value is out of range
  TemperatureSensorOutOfRange : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.0E-8; Distribution => Fixed;];

--likelihood that the temperature sensor will provide incorrect value but is not out of range
  TemperatureSensorUndetectableValueError : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.0E-8; Distribution => Fixed;];

--likelihood that the temperature sensor breaks
  TemperatureSensorBreaks : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.3E-7; Distribution => Fixed;];


--rate at which manage_regulator_mode_mrm fails
  MRMFailureRate : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.0E-9; Distribution => Fixed;];

--rate at which manage_heat_source_mhs fails
  MHSFailureRate : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.1E-9; Distribution => Fixed;];

--rate at which regulator fails
  RegulatorFailureRate : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.2E-7; Distribution => Fixed;];
--error rate of detection of regulator failure   
  DetectionRegulatorFailureRate : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.3E-10; Distribution => Fixed;];

--rate at which manage_monitor_mode fails
  MMMFailureRate : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.4E-9; Distribution => Fixed;];

--rate at which manage_alarm fails
  MAFailureRate : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.5E-9; Distribution => Fixed;];

--rate at which temp monitor fails
  MonitorFailureRate : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.6E-7; Distribution => Fixed;];
--error rate of detection of temp monitor failure   
  DetectionMonitorFailureRate : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.7E-10; Distribution => Fixed;];

--rate at which the heat source fails
  HeatSourceFailure : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.8E-7; Distribution => Fixed;];

--rate at which the operator makes errors
  OperatorErrorRate : constant EMV2::DistributionSpecification => 
    [ProbabilityValue => 1.2E-5; Distribution => Fixed;];
 
--hysteresis temperature offset, once sounded over-temp alarm must
--be 0.5F inside alarm range before stopping
  HysteresisTemperatureOffset : constant Iso_Properties::Fahrenheit => 0.5 F;    
    
--Allowed Heat Source Latency; Table A-11
  AllowedHeatSourceLatency : constant --Timing_Properties::
    Time => 6 sec;   
 
--thread period
  ThreadPeriod : constant  --Timing_Properties::
    Time => 100 ms;     
    
end Iso_Properties;  


